<Configuration>
  <Server port="@ctp.client.port@" />
  <Pipeline name="DICOM Pipeline">

    <ImportService 
            name="HTTP Import"
            class="org.rsna.ctp.stdstages.HttpImportService"
            root="roots/http-import"
            ssl="yes"
            port="@ctp.client.http_import_service.port@" 
            acceptDicomObjects="yes"
            acceptXmlObjects="yes"
            acceptZipObjects="yes"
            acceptFileObjects="no"
            quarantine="quarantines/http-import"/>
    <ImportService
            name="DICOM Import"
            class="org.rsna.ctp.stdstages.DicomImportService"
            root="roots/dicom-import"
            port="@ctp.client.dicom_import_service.port@" 
            timeTag="00120050"/>
    <Anonymizer
            name="Anonymizer"
            id="dicomAnonymizer"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            root="roots/anonymizer"
            script="roots/anonymizer/scripts/da.script"
            quarantine="quarantines/anonymizer" />
    <Anonymizer
            name="xmlAnonymizer"
            id="xmlAnonymizer"
            class="org.rsna.ctp.stdstages.XmlAnonymizer"
            root="roots/xml-anonymizer" 
            script="roots/anonymizer/scripts/xml-anonymizer.script" 
            quarantine="quarantines/xml-anonymizer" />  
    <Anonymizer name="zipAnonymizer"
                id="zipAnonymizer"
                class="org.rsna.ctp.stdstages.ZipAnonymizer"
                root="roots/zip-anonymizer" 
                script="roots/anonymizer/scripts/xml-anonymizer.script" 
                quarantine="quarantines/zip-anonymizer" />            
   <Processor 
      name="IDMap" 
      id="idmap"
      class="org.rsna.ctp.stdstages.IDMap" 
      root="IDMap" />
    <Processor
    	       id="databaseverifier"
               name="databaseverifier"
               class="org.rsna.ctp.stdstages.DatabaseVerifier"
               root="roots"
               url="http://localhost:@ctp.server.verifier.port@"
               username=""
               password=""
               maxAge="2"
               interval="10000" />  
    <ExportService
            name="HTTP Export"
            class="org.rsna.ctp.stdstages.HttpExportService"
            root="roots/http-export"
            url="http://localhost:@ctp.server.http_import_service.port@" />
  </Pipeline>

</Configuration>

