<!--L
   Copyright SAIC, Ellumen and RSNA (CTP)


   Distributed under the OSI-approved BSD 3-Clause License.
   See http://ncip.github.com/national-biomedical-image-archive/LICENSE.txt for details.
L-->

<Configuration>

  <Server
     port="@ctp.server.port@"/>

  <Pipeline
     name="DICOM Pipeline">

    <ImportService
       acceptDicomObjects="yes"
       acceptFileObjects="no"
       acceptXmlObjects="yes"
       acceptZipObjects="yes"
       class="org.rsna.ctp.stdstages.HttpImportService"
       name="HTTP Import"
       port="@ctp.server.http_import_service.port@"
       quarantine="quarantines/http-import"
       requireAuthentication="@ctp.server.require_authentication@"
       root="roots/http-import"/>

    <StorageService
       class="org.rsna.ctp.stdstages.BasicFileStorageService"
       id="storage"
       index="@ctp.server.storage_service.index@"
       maxSize="300"
       nLevels="4"
       name="Storage"
       quarantine="quarantines/storage"
       returnStoredFile="yes"
       root="@ctp.server.storage_service.root@">

      <jpeg
         frame="all"
         q="-1"
         wmax="512"
         wmin="512"/>
    </StorageService>

    <ExportService
       adapterClass="gov.nih.nci.nbia.dbadapter.NCIADatabase"
       class="org.rsna.ctp.stdstages.DatabaseExportService"
       fileStorageServiceID="storage"
       name="Database Export"
       port="@ctp.server.verifier.port@"
       quarantine="quarantines/database-export"
       requireAuthentication="@ctp.server.require_authentication@"
       root="roots/database-export"/>

    <Anonymizer
       class="org.rsna.ctp.stdstages.DicomAnonymizer"
       name="Anonymizer"
       id="dicomAnonymizer"
       quarantine="quarantines/anonymizer"
       root="roots/anonymizer"
       script="roots/anonymizer/scripts/da.script"/>
  </Pipeline>
</Configuration>
